<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.0"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:p1="clr-namespace:Bonsai.Harp.CF;assembly=Bonsai.Harp.CF"
                 xmlns:beh="clr-namespace:Harp.Behavior;assembly=Harp.Behavior"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="GroupWorkflow">
        <Name>HarpBehavior</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>Commands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="PortName" DisplayName="Behavior Port" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:Device">
                <harp:OperationMode>Active</harp:OperationMode>
                <harp:OperationLed>On</harp:OperationLed>
                <harp:DumpRegisters>true</harp:DumpRegisters>
                <harp:VisualIndicators>On</harp:VisualIndicators>
                <harp:Heartbeat>Disabled</harp:Heartbeat>
                <harp:IgnoreErrors>false</harp:IgnoreErrors>
                <harp:PortName>COM6</harp:PortName>
              </Combinator>
            </Expression>
            <Expression xsi:type="harp:Parse">
              <harp:Register xsi:type="harp:ParseMessagePayload">
                <harp:PayloadType>Timestamp</harp:PayloadType>
                <harp:IsArray>false</harp:IsArray>
              </harp:Register>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Timestamp</Name>
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Port0</p1:Mask>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>StartTrigger</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Mask" DisplayName="Center Port" />
            </Expression>
            <Expression xsi:type="p1:BehaviorEvent">
              <p1:Type>Input</p1:Type>
              <p1:Mask>Poke1InfraRedBeam</p1:Mask>
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Center</Name>
            </Expression>
            <Expression xsi:type="beh:Parse">
              <harp:Register xsi:type="beh:AnalogData" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnalogInput0</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FirFilter">
                <dsp:Anchor>-1</dsp:Anchor>
                <dsp:Kernel>1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1</dsp:Kernel>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold Lick Left" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                <Value>200</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Left</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>AnalogInput1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:FirFilter">
                <dsp:Anchor>-1</dsp:Anchor>
                <dsp:Kernel>1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1,1</dsp:Kernel>
              </Combinator>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="Threshold Lick Right" />
            </Expression>
            <Expression xsi:type="GreaterThan">
              <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
                <Value>200</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:DistinctUntilChanged" />
            </Expression>
            <Expression xsi:type="rx:PublishSubject">
              <Name>Right</Name>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="MemberSelector">
                <Selector>MessageBytes</Selector>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="SubscribeSubject">
                <Name>Path</Name>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Add">
                <Operand xsi:type="StringProperty">
                  <Value>/Joystick.bin</Value>
                </Operand>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Path" />
                </PropertyMappings>
              </Builder>
            </Expression>
            <Expression xsi:type="Disable">
              <Builder xsi:type="Combinator">
                <Combinator xsi:type="dsp:MatrixWriter">
                  <dsp:Path>C:\Users\SippyLab\Desktop\Anya_Jaden_CuRT\DATA\JT026/251219-FP5\2025-12-19T18-09-48/Joystick.bin</dsp:Path>
                  <dsp:Suffix>None</dsp:Suffix>
                  <dsp:Overwrite>false</dsp:Overwrite>
                  <dsp:Layout>ColumnMajor</dsp:Layout>
                </Combinator>
              </Builder>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="harp:CreateHarpMessage">
                <harp:MessageType>Write</harp:MessageType>
                <harp:Address>32</harp:Address>
                <harp:PayloadType>U8</harp:PayloadType>
                <harp:Payload>0</harp:Payload>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:IgnoreElements" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>Commands</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="2" Label="Source2" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="2" To="5" Label="Source1" />
            <Edge From="2" To="8" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="2" To="23" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="10" To="17" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="14" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="20" Label="Source1" />
            <Edge From="19" To="20" Label="Source2" />
            <Edge From="20" To="21" Label="Source1" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="23" To="27" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source2" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT0S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:BehaviorCommand">
        <p1:Type>SetOutput</p1:Type>
        <p1:Mask>Poke1Led</p1:Mask>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="2" To="3" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>